% excitatory synaptic current is a composite signal of AMPA and NMDA activation
% the synapse expresses STDP
% the STDP change initialy impacts W but extends its influence on P

% AMPA synapse

% NMDA synapse

% connectivity

% STDP


gAMPA = [0.1]
EAMPA = [0]
tauD = [2]
tauR = [0.2]
IC = [0.1]
IC_noise = [0]
temp_switch = 0
 
% fixed variables
netcon = ones(N_pre,N_post)

% functions
IAMPA(X,s) = -gAMPA.*(s*netcon).*(X-EAMPA) * temp_switch
 
% ODEs and ICs
s' = -s./tauD + 1/2*(1+tanh(X_pre/10)).*((1-s)/tauR)
s(0) = IC+IC_noise.*rand(1,N_pre)

if(k<100/dt)(temp_switch = 0)
if(k>=100/dt)(temp_switch = 1)

monitor IAMPA % always record the synaptic current
 
% linkers
@current += IAMPA(X_post,s)